CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The enhanced channels are those that have the 2 pixel radius median filter run on them. ', 'I.e. Channel 1 has no enhancement', 'Channel 1 enhanced had a 2 pixel median filter run over the image', '', 'This will work best if the images from the z-stacks are saved as image sequences in FIJI, so that each slice is appended with the slice number in the z-stack.  I.e. ch1_enhanced_CoolEmbryoJun2_003.tif would be channel 1, enhanced, slice 3, from the CoolEmbyroJun2 hyperstack.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:9
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "star")
    Name to assign these images:Prob_map
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c0") (file doesnot contain "matlab") (file doesnot contain "Prob")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c1") (file doesnot contain "enhanced")
    Name to assign these images:c1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2") (file doesnot contain "enhanced")
    Name to assign these images:c2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c4") (file doesnot contain "enhanced")
    Name to assign these images:c4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c3") (file doesnot contain "enhanced")
    Name to assign these images:c3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c1") (file does contain "enhanced")
    Name to assign these images:c1_Enhanced
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c2") (file does contain "enhanced")
    Name to assign these images:c2_enhanced
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c4") (file does contain "enhanced")
    Name to assign these images:c4_enhanced
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Calculate the Background function for Channel 1.  This should be the same process for all channels.']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
    Select the input image:c1
    Name the output image:c1_BG_Function
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Calculate the Background function for Channel 1 enhanced.  This should be the same process for all channels.']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
    Select the input image:c1_Enhanced
    Name the output image:c1_Enhanced_bgfun
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:['Calculate the Background function for Channel 2.  This should be the same process for all channels.']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
    Select the input image:c2
    Name the output image:c2_BG_Function
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['Calculate the Background function for Channel 2 enhanced.  This should be the same process for all channels.']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
    Select the input image:c2_enhanced
    Name the output image:c2_enhanced_BG_Function
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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notes:['Calculate the Background function for Channel 4.  This should be the same process for all channels.']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
    Select the input image:c4
    Name the output image:c4_BG_Function
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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notes:['Calculate the Background function for Channel 4 enhanced.  This should be the same process for all channels.']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
    Select the input image:c4_enhanced
    Name the output image:c4_enhanced_BG_Function
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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notes:['Apply the correct illumination functions to all images sets.']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
    Select the input image:c1
    Name the output image:c1_Corr
    Select the illumination function:c1_BG_Function
    Select how the illumination function is applied:Subtract
    Select the input image:c2
    Name the output image:c2_Corr
    Select the illumination function:c2_BG_Function
    Select how the illumination function is applied:Subtract
    Select the input image:c4
    Name the output image:c4_Corr
    Select the illumination function:c4_BG_Function
    Select how the illumination function is applied:Subtract
    Select the input image:c1_Enhanced
    Name the output image:c1_Enhanced_Corr
    Select the illumination function:c1_Enhanced_bgfun
    Select how the illumination function is applied:Subtract
    Select the input image:c2_enhanced
    Name the output image:c2_Enhanced_Corr
    Select the illumination function:c2_enhanced_BG_Function
    Select how the illumination function is applied:Subtract
    Select the input image:c4_enhanced
    Name the output image:c4_Enhanced_Corr
    Select the illumination function:c4_enhanced_BG_Function
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ConvertImageToObjects:[module_num:12|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notes:["Converts the StarDist labelled images to objects. If the StarDist images were exported as lablled images, then each nucleus in an image has an intensity value equal to that of it's nucleus ID. That is, all the pixels of nucleus 104 would have a pixel value of 104. Be sure that the objects coming in are saved in 16 bits, if you have more than 255 objects in an image."]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
    Select the input image:Prob_map
    Name the output object:ConvertImageToObjects
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FilterObjects:[module_num:13|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notes:["Filter out any object touching the side of the image. We just can't know how big they are if they extend past the edge, and it's good practice."]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
    Select the objects to filter:ConvertImageToObjects
    Name the output objects:Objects_frame_edge_filtered
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
MeasureObjectSizeShape:[module_num:14|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notes:['Measure the object size of the objects that are left after we remove those touching the side.  This is so we can filter by size in the next step.']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
    Select object sets to measure:Objects_frame_edge_filtered
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

FilterObjects:[module_num:15|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notes:['Filter any object that is less that 750 pixels. This is so that the top and bottom of the nucleii are skimmed off, to give spacing between nucleii. Without this, two nuclei that are on top of each other in Z will be tracked together as one really long nucleus.']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
    Select the objects to filter:Objects_frame_edge_filtered
    Name the output objects:Objects_edge_size_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:750
    Filter using a maximum measurement value?:Yes
    Maximum value:1000000

TrackObjects:[module_num:16|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notes:['Using Distance method, 2 pixels. This tracks the nuclei through the Z-stack as opposed to space. Doing this allows us to group the individual segmented nuclei in the frames into 3-dimensional nuclei that we can use to find the signal of our flourescent channels.', 'Basically we use this to integrate each nucleus slice into one nucleus object.']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
    Choose a tracking method:Distance
    Select the objects to track:Objects_edge_size_filtered
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    Maximum pixel distance to consider matches:2
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:Yes
    Maximum lifetime:15
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
MeasureObjectIntensity:[module_num:17|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notes:['We use this to measure the flourescent signal inside the objects in all slices, for all channels.  The integrated signal density will be given with the nuclear ID, and tracked nuclear ID, so we integrate over the tracked nuclear ID.']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
    Select images to measure:DAPI, c1, c1_Corr, c1_Enhanced, c1_Enhanced_Corr, c2, c2_Corr, c2_Enhanced_Corr, c2_enhanced, c3, c4, c4_Corr, c4_Enhanced_Corr, c4_enhanced
    Select objects to measure:Objects_edge_size_filtered

MeasureObjectSizeShape:[module_num:18|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notes:['We measure the size of the objects.  This is in case there is to be later filtering by eccentricity or size.']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
    Select object sets to measure:Objects_edge_size_filtered
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayObjects:[module_num:19|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notes:['These modules overlay the objects on different channels, as a sanity check']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
    Input:DAPI
    Name the output image:Tracked_Objects_on_DAPI
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:20|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
    Input:c1_Enhanced_Corr
    Name the output image:Tracked_objects_overlay_c1
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:21|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
    Input:c2_Corr
    Name the output image:Tracked_objects_overlay_c2
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:22|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
    Input:c3
    Name the output image:Tracked_objects_overlay_BF
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:23|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
    Input:c4_Corr
    Name the output image:Tracked_objects_overlay_c4
    Objects:Objects_edge_size_filtered
    Opacity:0.3

SaveImages:[module_num:24|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notes:['These modules save the images, as a sanity check.']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
    Select the type of image to save:Image
    Select the image to save:Tracked_Objects_on_DAPI
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_on_DAPI_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|DAPI_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:Tracked_objects_overlay_BF
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_overlay_BF_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|BF_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Tracked_objects_overlay_c1
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_overlay_c1_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|c1_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:Tracked_objects_overlay_c2
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_overlay_c2_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|c2_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:Tracked_objects_overlay_c4
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_overlay_c4_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|c4_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_cells_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|TrackedCells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:c1_Enhanced_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:c1_Enhanced_Corr
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|c1_Enhanced_Corr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:c2_Enhanced_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:c2_Enhanced_Corr
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|c2_Ehanced_Corr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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notes:['Change this and the previous two modules to save a comparison of whichever image you want to see the difference between background correction and uncorrect imaging from.']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
    Select the type of image to save:Image
    Select the image to save:c4_Enhanced_Corr
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:c4_Enhanced_Corr_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|c4_Enhanced_Corr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:33|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notes:['This module exports the data into Spreadsheets.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Objects_edge_size_filtered|Location_MaxIntensity_X_c4,Objects_edge_size_filtered|Location_MaxIntensity_X_c4_Enhanced_Corr,Objects_edge_size_filtered|Location_MaxIntensity_X_c4_Corr,Objects_edge_size_filtered|Location_MaxIntensity_X_c4_enhanced,Objects_edge_size_filtered|Location_MaxIntensity_X_c2,Objects_edge_size_filtered|Location_MaxIntensity_X_c2_Corr,Objects_edge_size_filtered|Location_MaxIntensity_X_c2_Enhanced_Corr,Objects_edge_size_filtered|Location_MaxIntensity_X_c2_enhanced,Objects_edge_size_filtered|Location_MaxIntensity_X_c1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:July_21_2021_Pipeline_CP4_750_output_
    Overwrite existing files without warning?:No
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